opentrons/protocol-designer 5.2.6
schemaVersion: 4
protocolName: Qiagen HMW MagAttract DNA Extraction
author: Constanza Marini
description: DNA extraction using Qiagen MagAttract HMW DNA for blood protocol.
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p300_multi_gen2: {mount: right}
modules:
  magneticModuleV2: {slot: 1}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 2}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 3}
  NEST 12 Well Reservoir 15 mL: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 7}
  Axygen 1 Well Reservoir 90 mL (1): {definitionId: opentrons/axygen_1_reservoir_90ml/1, slot: 11}
  Reagents: {definitionId: opentrons/opentrons_24_tuberack_nest_2ml_snapcap/1, slot: 10}
  Axygen 1 Well Reservoir 90 mL (2): {definitionId: opentrons/axygen_1_reservoir_90ml/1, slot: 8}
  Samples: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: 6}
  Waste: {definitionId: opentrons/nest_1_reservoir_195ml/1, slot: 9}
  Magnet: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: magneticModuleV2}
  Opentrons 96 Filter Tip Rack 200 µL (1): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 4}
  Opentrons 96 Filter Tip Rack 200 µL (2): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 5}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Sample: {description: Concetrated cells from saliva or whole blood, serialize: true}
  - Prot K: {description: Proteinase K}
  - RNase: {description: RNase A}
  - Beads: {description: Magnetic Beads in MagAttract Suspension G}
  - Lysis Buffer: {description: Buffer for lysis in Buffer AL}
  - Binding Buffer: {description: Pearl binding buffer in Buffer MB}
  - Wash Buffer: {description: Washing buffer in Buffer MW1}
  - Second Wash Buffer: {description: Second washing buffer in Buffer PE}
  - Water: {description: Distilled Water}
  - Elution Buffer: {description: Elution buffer in Buffer AE}
ingredLocations:
  Axygen 1 Well Reservoir 90 mL (1):
    Second Wash Buffer {volume: 74000}: A1
  NEST 12 Well Reservoir 15 mL:
    Binding Buffer {volume: 15000}: A1, A2
    Elution Buffer {volume: 15000}: A3
    Lysis Buffer {volume: 15000}: A4
    Water {volume: 15000}: A5-A9
  Reagents:
    Prot K {volume: 2000}: A1
    RNase {volume: 425}: A2
    Beads {volume: 1585}: A3
  Axygen 1 Well Reservoir 90 mL (2):
    Wash Buffer {volume: 74000}: A1
  Samples:
    Sample {volume: 202}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: Add Wash Buffer
  pipette: p300_multi_gen2
  volume: 700
  path: single
  changeTip: once
  aspirate_labware: Axygen 1 Well Reservoir 90 mL (2)
  aspirate_wells: A1
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  dispense_labware: Magnet
  dispense_wells: A1-A12
- stepType: pause
  stepName: vortex pause
  pauseAction: untilResume
  pauseMessage: Please, vortex Magnetic PCR plate for 1 min at 1400 rpm. Return the plate to the Magnetic Module in the same position.
- stepType: magnet
  stepName: Engage Magnets
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6.8
- stepType: pause
  stepName: Bead separation
  pauseAction: untilTime
  pauseMinute: 1
  pauseMessage: Bead separation.
- stepType: moveLiquid
  stepName: Remove supernatant
  stepDetails: Check how much supernatant must be removed and update this step.
  pipette: p300_multi_gen2
  volume: 650
  path: single
  changeTip: perSource
  aspirate_labware: Magnet
  aspirate_wells: A1-A12
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  dispense_labware: Waste
  dispense_wells: A1
- stepType: magnet
  stepName: Disengage magnets
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: moveLiquid
  stepName: Add Wash Buffer
  pipette: p300_multi_gen2
  volume: 700
  path: single
  changeTip: once
  aspirate_labware: Axygen 1 Well Reservoir 90 mL (2)
  aspirate_wells: A1
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  dispense_labware: Magnet
  dispense_wells: A1-A12
- stepType: pause
  stepName: Vortex Pause
  pauseAction: untilResume
  pauseMessage: Please, vortex Magnetic PCR plate for 1 min at 1400 rpm. Return the plate to the Magnetic Module in the same position.
- stepType: magnet
  stepName: Engage Magnets
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6.8
- stepType: pause
  stepName: Bead separation
  pauseAction: untilTime
  pauseMinute: 1
  pauseMessage: Bead separation.
- stepType: moveLiquid
  stepName: Remove supernatant
  stepDetails: Check how much supernatant must be removed and update this step.
  pipette: p300_multi_gen2
  volume: 650
  path: single
  changeTip: perSource
  aspirate_labware: Magnet
  aspirate_wells: A1-A12
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  dispense_labware: Waste
  dispense_wells: A1
- stepType: magnet
  stepName: Disengage magnets
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: moveLiquid
  stepName: Add Wash Buffer 2
  pipette: p300_multi_gen2
  volume: 700
  path: single
  changeTip: once
  aspirate_labware: Axygen 1 Well Reservoir 90 mL (1)
  aspirate_wells: A1
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  dispense_labware: Magnet
  dispense_wells: A1-A12
- stepType: pause
  stepName: Vortex Pause
  pauseAction: untilResume
  pauseMessage: Please, vortex Magnetic PCR plate for 1 min at 1400 rpm. Return the plate to the Magnetic Module in the same position.
- stepType: magnet
  stepName: Engage Magnets
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6.8
- stepType: pause
  stepName: Bead separation
  pauseAction: untilTime
  pauseMinute: 1
  pauseMessage: Bead separation.
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Filter Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: Axygen 1 Well Reservoir 90 mL (2), well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: Magnet, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: Axygen 1 Well Reservoir 90 mL (2), well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: Magnet, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: Axygen 1 Well Reservoir 90 mL (2), well: A1, offsetFromBottomMm: 1, flowRate: 94}
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